---
API: 2.1
OpenSesame: 3.3.14
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/robbertmijn/Documents/projecten_local/10K Faces/face-processor"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#808080"

define RSVP_plugin RSVP
	set description "Add an RSVP to your experiment"
	set _targets_shuffle no
	set _targets "[targets]"
	set _target_positions "[T1pos];15"
	set _stimdur 125
	set _ntargets 2
	set _ndistractors 13
	set _mode images
	set _distractors_shuffle no
	set _distractors "[distractors]"

define sketchpad ask_response
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="did you see a [target_sex]?<br /><br />z = yes, m = no" x=0 y=0 z_index=0

define sketchpad block_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="next block, T1 is [target_sex]<br /><br />press to start<br />" x=0 y=0 z_index=0

define loop block_loop
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 T1pos 5
	setcycle 0 target yes
	setcycle 0 correct_response z
	setcycle 1 T1pos 6
	setcycle 1 target yes
	setcycle 1 correct_response z
	setcycle 2 T1pos 7
	setcycle 2 target yes
	setcycle 2 correct_response z
	setcycle 3 T1pos 8
	setcycle 3 target yes
	setcycle 3 correct_response z
	setcycle 4 T1pos 5
	setcycle 4 target no
	setcycle 4 correct_response m
	setcycle 5 T1pos 6
	setcycle 5 target no
	setcycle 5 correct_response m
	setcycle 6 T1pos 7
	setcycle 6 target no
	setcycle 6 correct_response m
	setcycle 7 T1pos 8
	setcycle 7 target no
	setcycle 7 correct_response m
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_instructions always
	run block_loop always

define sketchpad end
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="the end" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started always
	run pygaze_init always
	run init_evtx always
	run init_vars always
	run experimental_loop always
	run end always

define loop experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_sex male
	setcycle 0 distractor_sex female
	setcycle 1 target_sex female
	setcycle 1 distractor_sex male
	setcycle 2 target_sex male
	setcycle 2 distractor_sex female
	setcycle 3 target_sex female
	setcycle 3 distractor_sex male
	run block_sequence

define feedback feedback
	set reset_variables yes
	set duration 350
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[correct]" x=0 y=0 z_index=0

define sketchpad fixation
	set duration 750
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define keyboard_response get_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;m"

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define EVTxx init_evtx
	set description "Allows setting or pulsing values of pins on the output port of various EventExchanger devices"
	set _value -1
	set _productName DUMMY
	set _outputMode "Pulse Output Lines"
	set _duration 500

define inline_script init_trial
	set description "Executes Python code"
	set _run ""
	___prepare__
	if var.distractor_sex == "male":
	    if var.target == "yes":
	        var.distractors = ";".join([males.pop(0) for _ in range(13)])
	        var.targets = ";".join([females.pop(0), males.pop(0)])
	    else:
	        var.distractors = ";".join([males.pop(0) for _ in range(13)])
	        var.targets = ";".join([males.pop(0), males.pop(0)])
	
	if var.distractor_sex == "female":
	    if var.target == "yes":
	        var.distractors = ";".join([females.pop(0) for _ in range(13)])
	        var.targets = ";".join([males.pop(0), females.pop(0)])
	    else:
	        var.distractors = ";".join([females.pop(0) for _ in range(13)])
	        var.targets = ";".join([females.pop(0), females.pop(0)])
	__end__

define inline_script init_vars
	set description "Executes Python code"
	set _run ""
	___prepare__
	females = ["faces/f_{}.jpg".format(i) for i in range(531)] * 5
	males = ["faces/m_{}.jpg".format(i) for i in range(377)] * 5
	
	fixation_trigger = 1
	rsvp_trigger = 2
	__end__

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define pygaze_drift_correct pygaze_drift_correct
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_init pygaze_init
	set tracker_type "Simple dummy"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_log pygaze_log
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_start_recording pygaze_start_recording
	set status_msg "start_trial [trial_number]"
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define inline_script start_fixation
	set description "Executes Python code"
	___run__
	eyetracker.log(f'start_phase {fixation_trigger}')
	EE.PulseLines(fixation, 10)
	__end__
	set _prepare ""

define inline_script start_response
	set description "Executes Python code"
	set _run "eyetracker.log(f'end_phase {rsvp_trigger}')"
	set _prepare ""

define inline_script start_rsvp
	set description "Executes Python code"
	___run__
	eyetracker.log(f'end_phase {fixation_trigger}')
	eyetracker.log(f'start_phase {rsvp_trigger}')
	EE.PulseLines(rsvp, 10)
	__end__
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_trial always
	run pygaze_drift_correct always
	run pygaze_start_recording always
	run start_fixation always
	run fixation always
	run start_rsvp always
	run RSVP always
	run start_response always
	run pygaze_stop_recording always
	run ask_response always
	run get_response always
	run feedback always
	run pygaze_log always
	run logger always

